# Generated by Configurator on Thu Aug 17 15:43:19 PDT 2023

# Reset
Property,Core,Initialize,0

# Devices
Device,AcquireCamera,Acquire,AcquireCamera

# Pre-init settings for devices
Property,AcquireCamera,Camera_1,simulated: radial sin
Property,AcquireCamera,Camera_2,simulated: uniform random

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,AcquireCamera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Save
# Preset: 1
ConfigGroup,Save,1,AcquireCamera,SaveToZarr,1

# Preset: 0
ConfigGroup,Save,0,AcquireCamera,SaveToZarr,0


# Group: Directory_root
# Preset: NewPreset
ConfigGroup,Directory_root,NewPreset,AcquireCamera,SaveRoot,


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,AcquireCamera,SavePrefix,test
ConfigGroup,System,Startup,AcquireCamera,SaveRoot,C:\AcqData\czi\zarr-rec
ConfigGroup,System,Startup,AcquireCamera,SaveToZarr,0


# Group: Name_prefix
# Preset: NewPreset
ConfigGroup,Name_prefix,NewPreset,AcquireCamera,SavePrefix,



# PixelSize settings

