# Generated by Configurator on Wed Nov 15 12:32:16 PST 2023

# Reset
Property,Core,Initialize,0

# Devices
Device,AcquireCamera,Acquire,AcquireCamera

# Pre-init settings for devices
Property,AcquireCamera,Camera_1,simulated: radial sin
Property,AcquireCamera,Camera_2,None

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,AcquireCamera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

